PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello

        Welcome to the PsychoPy script developed by Eli, for testing average reaction time depending on different colours. I really appreciate your participation as every piece of data contributes to the final conclusion

        Press the space bar when you have finished reading
    KeyboardComponent res_intro
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine howitworks
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    TextComponent text_howitworks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This test is made of two parts
        Visual and Auditory

        This test aims to test your reaction time. When you hear the sound being played or the image being shown, press the space bar on the keyboard as soon as you can. Do not try to predict the time that the stimulus will start as all stimuli are generated at random timings

        Please move the mouse cursor to the edge of the screen or off screen to reduce interference. If the computer stops working during the test, please tell me

        The first few stimuli will be the test run for you familiarise with this test. The data from those tests will not be included in the analysis. Please use these test runs to adjust the screen so that the circle is at the centre of your field of view, without any distortion.

        Press the space bar when you have finished reading
    KeyboardComponent endhowitworks
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine test
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    PolygonComponent testpolygon
      fillColor = red
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine red0_5
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    KeyboardComponent res_red_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    PolygonComponent polygon_red_0_5
      fillColor = 0.0000, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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  Routine red0_625
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    PolygonComponent polygon_red_0_625
      fillColor = 0.2500, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_red_0_625
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blue0_5
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    PolygonComponent polygon_blue_0_5
      fillColor = -1.0000, -0.3333, 0.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_blue_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blue0_625
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    PolygonComponent polygon_blue_0_625
      fillColor = -1.0000, -0.1667, 0.2500
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_blue_0_625
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine test_passed
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Congrats!!!! You have done you test run

        Press space bar to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine green0_5
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    PolygonComponent polygon_green_0_5
      fillColor = -0.6667, 0.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_green_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine green0_625
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    PolygonComponent polygon_green_0_625
      fillColor = -0.5833, 0.2500, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_green_0_625
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine purple0_5
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    PolygonComponent polygon_purple_0_5
      fillColor = 0.0000, -1.0000, 0.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_purple_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine purple0_625
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    PolygonComponent polygon_purple_0_625
      fillColor = 0.2500, -1.0000, 0.2500
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_purple_0_625
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine sound_test
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  Routine yellow0_5
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    PolygonComponent polygon_0_5
      fillColor = 0.0000, 0.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_yellow_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine yellow0_625
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    PolygonComponent polygon_yellow_0_625
      fillColor = 0.2500, 0.2500, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_yellow_0_625
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine red0_75
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    PolygonComponent polygon_red_0_75
      fillColor = 0.5000, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_red_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine red0_875
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    PolygonComponent polygon_red_0_875
      fillColor = 0.7500, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_red_0_875
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine red1
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    PolygonComponent polygon_red_1
      fillColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_red_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine yellow0_75
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    PolygonComponent polygon_yellow_0_75
      fillColor = 0.5000, 0.5000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_yellow_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine yellow0_875
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    PolygonComponent polygon_yellow_0_875
      fillColor = 0.7500, 0.7500, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_yellow_0_875
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine yellow1
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    PolygonComponent polygon_yellow_1
      fillColor = 1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_yellow_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blue0_75
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    PolygonComponent polygon_blue_0_75
      fillColor = -1.0000, -0.0000, 0.5000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_blue_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blue0_875
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    PolygonComponent polygon_blue_0_875
      fillColor = -1.0000, 0.1667, 0.7500
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_blue_0_875
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blue1
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    PolygonComponent polygon_blue_1
      fillColor = -1.0000, 0.3333, 1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_blue_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine green0_75
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    PolygonComponent polygon_green_0_75
      fillColor = -0.5000, 0.5000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_green_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine green0_875
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  Routine green1
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    PolygonComponent polygon_green_1
      fillColor = -0.3333, 1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_green_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine purple0_75
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    PolygonComponent polygon_purple_0_75
      fillColor = 0.5000, -1.0000, 0.5000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_purple_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine purple0_875
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  Routine purple1
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    PolygonComponent polygon_purple_1
      fillColor = 1.0000, -1.0000, 1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_purple_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine orange0_5
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    PolygonComponent polygon_orange_0_5
      fillColor = 0.0000, -0.3333, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_orange_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine orange0_625
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    PolygonComponent polygon_orange_0_625
      fillColor = 0.2500, -0.1667, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_orange_0_625
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine orange0_75
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    PolygonComponent polygon_orange_0_75
      fillColor = 0.5000, 0.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_orange_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine orange0_875
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    PolygonComponent polygon_res_0_875
      fillColor = 0.7500, 0.1667, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_orange_0_875
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine orange1
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    PolygonComponent polygon_orange_1
      fillColor = 1.0000, 0.3333, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2
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    KeyboardComponent res_orange_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audiointro
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    TextComponent audiotext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now finished all visual stimuli

        The next part is made of a series of sound stimuli with different frequencies. As you did for the visual stimuli, press the space bar when you hear the sound.

        The first stimulus is your test run for you to familiarise with the test

        Press space bar when you have finished reading
    KeyboardComponent audiointro_res
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audiotest
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    SoundComponent sound_testrun
      sound = audio files/2500.wav
      startVal [time (s)] = 2
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    KeyboardComponent res_audio_testrun
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audiotestpassed
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    TextComponent autest_passed
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        You have done the testrun



        Press the space bar when you have finished reading
    KeyboardComponent res_testpassed
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_2500Hz
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    SoundComponent sound_2500Hz
      sound = audio files/2500.wav
      startVal [time (s)] = 2
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    KeyboardComponent res_2500Hz
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_5000Hz
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    SoundComponent sound_5000Hz
      sound = audio files/5000.wav
      startVal [time (s)] = 2
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    KeyboardComponent res_5000Hz
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_7500Hz
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    SoundComponent sound_7500Hz
      sound = audio files/7500.wav
      startVal [time (s)] = 2
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    KeyboardComponent res_7500Hz
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_10000Hz
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  Routine audio_12500Hz
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    SoundComponent sound_12500
      sound = audio files/12500.wav
      startVal [time (s)] = 2
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    KeyboardComponent res_12500
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_15000Hz
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    SoundComponent sound_15000
      sound = audio files/15000.wav
      startVal [time (s)] = 2
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    KeyboardComponent res_15000Hz
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine outro
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    TextComponent text_outro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now finished the reaction time test. Remember to start a new session with session number 002 if this is your first session

        Thank you to your participation in the experiment

        Please do not forget to apply hand sanitiser on the way out

        You may press Esc to end the test
  Routine audio_500Hz_0_25
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    SoundComponent sound_500Hz_0_25
      sound = audio files/500.wav
      startVal [time (s)] = 2
      volume = 0.25
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    KeyboardComponent res_500Hz_0_25
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_500Hz_1
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  Routine audio_500Hz_0_5
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    SoundComponent sound_500Hz_0_5
      sound = audio files/500.wav
      startVal [time (s)] = 2
      volume = 0.5
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    KeyboardComponent res_500Hz_0_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_500Hz_0_75
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    SoundComponent sound_500Hz_0_75
      sound = audio files/500.wav
      startVal [time (s)] = 2
      volume = 0.75
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    KeyboardComponent res_500Hz_0_75
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine audio_2500Hz_0_25
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  Routine audio_2500Hz_0_5
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  Routine audio_2500Hz_0_75
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  Routine audio_5000Hz_0_25
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  Routine audio_5000Hz_0_5
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  Routine audio_5000Hz_0_75
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  Routine audio_7500Hz_0_25
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  Routine audio_7500Hz_0_5
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  Routine audio_7500Hz_0_75
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  Routine audio_10000Hz_0_25
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  Routine audio_10000Hz_0_5
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  Routine audio_10000Hz_0_75
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  Routine audio_12500Hz_0_25
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  Routine audio_12500Hz_0_5
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  Routine audio_12500Hz_0_75
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Flow
  Routine intro
  Routine howitworks
  LoopInitiator testloop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine test
  LoopTerminator testloop
  Routine test_passed
  Routine red0_5
  Routine red0_625
  Routine red0_75
  Routine red0_875
  Routine red1
  Routine yellow0_5
  Routine yellow0_625
  Routine yellow0_75
  Routine yellow0_875
  Routine yellow1
  Routine blue0_5
  Routine blue0_625
  Routine blue0_75
  Routine blue0_875
  Routine blue1
  Routine green0_5
  Routine green0_625
  Routine green0_75
  Routine green0_875
  Routine green1
  Routine purple0_5
  Routine purple0_625
  Routine purple0_75
  Routine purple0_875
  Routine purple1
  Routine orange0_5
  Routine orange0_625
  Routine orange0_75
  Routine orange0_875
  Routine orange1
  Routine audiointro
  LoopInitiator audiotestloop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine audiotest
  LoopTerminator audiotestloop
  Routine audiotestpassed
  Routine audio_500Hz_0_25
  Routine audio_500Hz_0_5
  Routine audio_500Hz_0_75
  Routine audio_500Hz_1
  Routine audio_2500Hz_0_25
  Routine audio_2500Hz_0_5
  Routine audio_2500Hz_0_75
  Routine audio_2500Hz
  Routine audio_5000Hz_0_25
  Routine audio_5000Hz_0_5
  Routine audio_5000Hz_0_75
  Routine audio_5000Hz
  Routine audio_7500Hz_0_25
  Routine audio_7500Hz_0_5
  Routine audio_7500Hz_0_75
  Routine audio_7500Hz
  Routine audio_10000Hz_0_25
  Routine audio_10000Hz_0_5
  Routine audio_10000Hz_0_75
  Routine audio_10000Hz
  Routine audio_12500Hz_0_25
  Routine audio_12500Hz_0_5
  Routine audio_12500Hz_0_75
  Routine audio_12500Hz
  Routine outro
